CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Add the plate images to view when testing parameters. If not, make sure it is blank prior to processing the images via the notebook.', '', 'Custom file critera to not include "Merge" channel in the pipeline.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "Merge")

Metadata:[module_num:2|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notes:['Extract metadata per image to add into the output.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Plate>NF[0-9]{4})_raw_images/(?P<Well>[C-G]{1}[0-9]{1,2})-(?P<Site>[0-9]{1})
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Channel>[0-9]{3}|TRANS)_(?P<Zslice>ZS[0-9]{3})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Assign each image to its channel.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "405")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "555")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "640")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TRANS")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['We do not use grouping in this pipeline.']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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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notes:['To measure image quality, we only measure for blur and saturation, using the defaults.']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
ExportToSpreadsheet:[module_num:6|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notes:['Export all of the whole image quality metrics to a spreadsheet to load in and evaluate.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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