CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]|[A-P][0-9]{2})-(?P<FOV>[0-9])_(?P<channel>(TRANS|[0-9]{3}))
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Width:  154.9031 um (1540)', 'Height:  154.6013 um (1537)', 'depth: variable at 1 um spacing', 'Resolution:  9.9417 pixels per um', 'Pixel size: 0.1006x0.1006 um^2', 'Magnification: 0.50']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:9
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:10
    Select the rule criteria:and (file does contain "405")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "555")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "640")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TRANS")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "nuclei_mask")
    Name to assign these images:nuclei_mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cell_mask")
    Name to assign these images:cell_mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cytoplasm_mask")
    Name to assign these images:cytoplasm_mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "organoid_mask")
    Name to assign these images:organoid_mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:FOV

ConvertImageToObjects:[module_num:5|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
    Select the input image:organoid_mask
    Name the output object:Organoids
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:6|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
    Select the input image:nuclei_mask
    Name the output object:nuclei_mask
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:7|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
    Select the input image:cell_mask
    Name the output object:cell_mask
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:8|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
    Select the input image:cytoplasm_mask
    Name the output object:cytoplasm_mask
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

RelateObjects:[module_num:9|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
    Parent objects:Organoids
    Child objects:nuclei_mask
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nuclei
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
RelateObjects:[module_num:10|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
    Parent objects:Nuclei
    Child objects:cell_mask
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Cells
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
RelateObjects:[module_num:11|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
    Parent objects:Nuclei
    Child objects:cytoplasm_mask
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Cytoplasm
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
MeasureColocalization:[module_num:12|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enabled:False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
    Select images to measure:AGP, Brightfield, DNA, ER, Mito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, Nuclei, Organoids
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:13|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enabled:False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
    Select images to measure:AGP, Brightfield, DNA, ER, Mito
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei, Organoids
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:14|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enabled:False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
    Select images to measure:AGP, Brightfield, DNA, ER, Mito
    Select objects to measure:Cells, Cytoplasm, Nuclei, Organoids

MeasureObjectNeighbors:[module_num:15|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notes:['Organoid - Organoid - Neighbors']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enabled:False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
    Select objects to measure:Organoids
    Select neighboring objects to measure:Organoids
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:16|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enabled:False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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:17|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notes:['Cell - Cell - Neighbors']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enabled:False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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:18|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enabled:False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
    Select object sets to measure:Cells, Cytoplasm, Nuclei, Organoids
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:19|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enabled:False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
    Select images to measure:AGP, Brightfield, DNA, ER, Mito
    Select objects to measure:Cells, Cytoplasm, Nuclei, Organoids
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ExportToDatabase:[module_num:20|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:temporary.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cells,Cytoplasm,Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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